DETECTOR=PILATUS
MINIMUM_VALID_PIXEL_VALUE=0
OVERLOAD=1810897
SENSOR_THICKNESS= 0.32
DIRECTION_OF_DETECTOR_X-AXIS= 1.000 -0.000 -0.000
DIRECTION_OF_DETECTOR_Y-AXIS= 0.000 1.000 -0.000
NX=2463 NY=2527 QX=0.1720 QY=0.1720
DETECTOR_DISTANCE= 510.997
ORGX= 1269.9 ORGY= 1303.8
ROTATION_AXIS= 1.000 0.001 0.006
STARTING_ANGLE= 0.000
OSCILLATION_RANGE= 0.050
X-RAY_WAVELENGTH= 0.96863
INCIDENT_BEAM_DIRECTION= -0.003 0.001 1.032
FRACTION_OF_POLARIZATION= 0.999
POLARIZATION_PLANE_NORMAL= 0.000 1.000 0.000
NAME_TEMPLATE_OF_DATA_FRAMES= /blah/xtal1_1_????.cbf
TRUSTED_REGION= 0.0 1.41
UNTRUSTED_RECTANGLE= 487 495 0 2528
UNTRUSTED_RECTANGLE= 981 989 0 2528
UNTRUSTED_RECTANGLE= 1475 1483 0 2528
UNTRUSTED_RECTANGLE= 1969 1977 0 2528
UNTRUSTED_RECTANGLE= 0 2464 195 213
UNTRUSTED_RECTANGLE= 0 2464 407 425
UNTRUSTED_RECTANGLE= 0 2464 619 637
UNTRUSTED_RECTANGLE= 0 2464 831 849
UNTRUSTED_RECTANGLE= 0 2464 1043 1061
UNTRUSTED_RECTANGLE= 0 2464 1255 1273
UNTRUSTED_RECTANGLE= 0 2464 1467 1485
UNTRUSTED_RECTANGLE= 0 2464 1679 1697
UNTRUSTED_RECTANGLE= 0 2464 1891 1909
UNTRUSTED_RECTANGLE= 0 2464 2103 2121
UNTRUSTED_RECTANGLE= 0 2464 2315 2333
DATA_RANGE= 1 20
JOB=XYCORR INIT DEFPIX INTEGRATE CORRECT
REFINE(INTEGRATE)=
REFINE(CORRECT)=
INCLUDE_RESOLUTION_RANGE= 20.0 0.0
MINIMUM_I/SIGMA=50
CORRECTIONS=
NBATCH=1
